PsychoPy2experiment version="2022.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine first_round
    TextboxComponent fixation
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent target
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,isDifficult)
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    KeyboardComponent resp_one
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
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    TextboxComponent pre_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $len(resp_one.keys >= 1)
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine code
    CodeComponent declarations
      Code Type = Auto->JS
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      Before Experiment:
        difficultTargetDuration = 0.06 # seconds
        feedbackColor = ""
        feedbackText = ""

        def generateTargetString(targetLetter, isDifficult):
            lowerBound = 1 if isDifficult else 2
            upperBound = 6 if isDifficult else 5
            position = randint(lowerBound, upperBound)
            return position * 'X' + targetLetter + (7 - position) * 'X'

        def getTargetDuration(isDifficult):
            return difficultTargetDuration if isDifficult else 0.15

        def updateDifficultTargetDuration(wasCorrect):
            difficultTargetDuration += -0.01 if wasCorrect else 0.01
            if difficultTargetDuration > 0.15:
                difficultTargetDuration = 0.15
            elif difficultTargetDuration < 0.01:
                difficultTargetDuration = 0.01

        # generates a random duration in seconds from lowerBound to upperBound
        # lowerBound and upperBound cannot have more than one decimal place.
        def randomDelay(lowerBound, upperBound):
            lowerBoundDec = lowerBound * 10
            upperBoundDec = upperBound * 10
            randomDelayDec = randint(lowerBoundDec,upperBoundDec)
            return randomDelayDec / 10

        def getFeedback():
            if randint(0,1):
                feedbackColor = "green"
                feedbackText = "+ correct +"
            else:
                feedbackColor = "red"
                feedbackText = "x wrong x"
Flow
  Routine code
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('targetLetter', 'T'), ('isDifficult', 0)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 1)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 1)])]
    Routine first_round
  LoopTerminator trials
